PsychoPy2experiment version="2020.2.4"
Settings
  Audio lib = sounddevice
  Data filename = u'data/%s_%s_%s' % (expInfo['Subject ID'], expName, expInfo['TDT Block'])
  Experiment info = {'Subject ID': 'ECXXX', 'TDT Block': 'BXX', 'block_type': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2020.2
  Window size (pixels) = [1440, 900]
  expName = sequence_LD
  logging level = debug
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Routines
  Routine trial
    TextComponent text
      durationEstim = 5
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will hear spoken sounds:

        e.g. “tenticles”

        e.g. “senticles”

        After each sound, decide whether what you hear is an existing word of English.

        Press the space bar to see an example.
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space','return'
      durationEstim = 5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine audio
    SoundComponent audio_word
      durationEstim = 2
      sound [set every repeat] = $wav_file
      startVal [time (s)] = 0
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  Routine end
    TextComponent text_2
      durationEstim = 5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Done!
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    CodeComponent code_4
      Code Type = Auto->JS
  Routine response
    TextComponent option_left
      durationEstim = 2
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      text = NON-WORD
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    TextComponent option_right
      durationEstim = 2
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      text = WORD
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    KeyboardComponent key_resp_4
      allowedKeys = 'z','m','left','right','space'
      durationEstim = 2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine mturk_code
    TextComponent text_4
      color = Black
      durationEstim = 5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Thank you for taking part!

        Press SPACE to finish.
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space','return'
      durationEstim = 5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine begin
    TextComponent text_6
      durationEstim = 5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press SPACE to begin!
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      durationEstim = 5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine example_response
    TextComponent text_7
      color = black
      durationEstim = 5
      letterHeight = 0.02
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        After hearing each word, you will see this on the screen.

        Press “Z” when it is NOT a word.

        Press “M” when it IS a word.
    TextComponent text_3
      durationEstim = 2
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      text = NON-WORD
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    TextComponent text_5
      durationEstim = 2
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      text = WORD
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    KeyboardComponent key_resp_5
      allowedKeys = 'z','m','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  Routine example_response
  Routine begin
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = barakeet_trial_info-1.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('wav_file', 'stimuli/11_desolate_dn_002.wav'), ('stim_number', 11), ('word_end', 'desolate'), ('non_word', 'nesolate'), ('phoneme_pair', 'dn'), ('morph_n', 2), ('base', '11_desolate_dn_002'), ('file_format', 'wav'), ('root', 'stimuli/'), ('word_side', 'right'), ('item_left', 'nesolate'), ('item_right', 'desolate'), ('resampled', 1)]),
      OrderedDict([('wav_file', 'stimuli/11_necessary_dn_002.wav'), ('stim_number', 11), ('word_end', 'necessary'), ('non_word', 'decessary'), ('phoneme_pair', 'dn'), ('morph_n', 2), ('base', '11_necessary_dn_002'), ('file_format', 'wav'), ('root', 'stimuli/'), ('word_side', 'right'), ('item_left', 'decessary'), ('item_right', 'necessary'), ('resampled', 1)]),
      OrderedDict([('wav_file', 'stimuli/11_desolate_dn_003.wav'), ('stim_number', 11), ('word_end', 'desolate'), ('non_word', 'nesolate'), ('phoneme_pair', 'dn'), ('morph_n', 3), ('base', '11_desolate_dn_003'), ('file_format', 'wav'), ('root', 'stimuli/'), ('word_side', 'right'), ('item_left', 'nesolate'), ('item_right', 'desolate'), ('resampled', 2)]),
      OrderedDict([('wav_file', 'stimuli/11_necessary_dn_003.wav'), ('stim_number', 11), ('word_end', 'necessary'), ('non_word', 'decessary'), ('phoneme_pair', 'dn'), ('morph_n', 3), ('base', '11_necessary_dn_003'), ('file_format', 'wav'), ('root', 'stimuli/'), ('word_side', 'right'), ('item_left', 'decessary'), ('item_right', 'necessary'), ('resampled', 2)])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
    Routine audio
    Routine response
  LoopTerminator trials
  Routine mturk_code
