PsychoPy2experiment version="2020.2.4"
Settings
  Audio lib = sounddevice
  Data filename = u'data/%s_%s_%s' % (expInfo['Subject ID'], expName, expInfo['TDT Block'])
  Experiment info = {'Subject ID': 'ECXXX', 'TDT Block': 'BXX', 'block_type': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2020.2
  Window size (pixels) = [1440, 900]
  expName = sequence
  logging level = debug
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Routines
  Routine trial
    TextComponent text
      durationEstim = 5
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will hear spoken words:

        e.g. “tenticles”

        After each word, you’ll be given two options:

        e.g. “tenticles ————— senticles”

        Click on the grid to indicate how much the word you heard sounded like the word on the left, on the right, or something in-between.

        Sometimes you will hear words that sound ambiguous between the two options, to varying degrees. That means you will need to use the whole scale - not just the endpoints.

        Press the space bar to see an example.
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space','return'
      durationEstim = 5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine audio
    SoundComponent audio_word
      durationEstim = 2
      sound [set every repeat] = $wav_file
      startVal [time (s)] = 0
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  Routine end
    TextComponent text_2
      durationEstim = 5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Done!
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    CodeComponent code_4
      Code Type = Auto->JS
  Routine response
    ImageComponent photodiode
      durationEstim = 5
      image = stimuli/photodiode.png
      pos = (0.8, 0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    SliderComponent slider
      color = black
      durationEstim = 5
      forceEndRoutine = True
      granularity = 0
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    MouseComponent mouse
      clickable = circle
      durationEstim = 5
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        slider = new visual.Slider({"win": psychoJS.window, "name": "slider", "size": [0.8, 0.1], "pos": [0, (0)], "units": null, "labels": [item_left, item_right], "ticks": [1, 2, 3, 4, 5, 6, 7, 8, 9, 10], "granularity": 0, "style": ["rating"], "color": "black", "font": "Arial", "flip": false, "depth": 0, fontSize: 0.06});
        sliderClick = 0;

        slider._skin.STANDARD.MARKER_COLOR = new util.Color([1, 0, -1]);
        slider._skin.MARKER_SIZE = [0.1, 0.1];

        gotValidClick = false;
      Begin Routine:
        slider = visual.Slider(win=win, name='slider',
            size=(0.8, 0.1), pos=(0, 0), units=None,
            labels=[item_left, item_right], ticks=(1, 2, 3, 4, 5, 6, 7, 8, 9, 10),
            granularity=0, style=['rating'],
            color='black', font='HelveticaBold',
            flip=False, depth=0)

        sliderClick=0
        mouse.setPos()
  Routine mturk_code
    TextComponent text_4
      color = Black
      durationEstim = 5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Thank you for taking part!

        Press SPACE to finish.
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space','return'
      durationEstim = 5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine begin
    TextComponent text_6
      durationEstim = 5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press SPACE to begin!
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      durationEstim = 5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine example_response
    TextComponent text_7
      color = black
      durationEstim = 5
      letterHeight = 0.02
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        After hearing each word, you will see this grid on the screen. Please first click on the location on the grid that reflects what you heard.

        Sometimes you will hear things that sound similar to both options. In these cases, click somewhere in the middle of the grid.

        The experiment will automatically continue after every click you make.
    SliderComponent slider_2
      color = black
      durationEstim = 5
      forceEndRoutine = True
      granularity = 0
      labels = ['necessary', 'decessary']
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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Flow
  Routine trial
  Routine example_response
  Routine begin
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = barakeet_trial_info-1.csv
    loopType = random
    nReps = 4
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    conditions:
      [OrderedDict([('wav_file', 'stimuli/11_desolate_dn_002.wav'), ('stim_number', 11), ('word_end', 'desolate'), ('non_word', 'nesolate'), ('phoneme_pair', 'dn'), ('morph_n', 2), ('base', '11_desolate_dn_002'), ('file_format', 'wav'), ('root', 'stimuli/'), ('word_side', 'right'), ('item_left', 'nesolate'), ('item_right', 'desolate'), ('resampled', 1)]),
      OrderedDict([('wav_file', 'stimuli/11_necessary_dn_002.wav'), ('stim_number', 11), ('word_end', 'necessary'), ('non_word', 'decessary'), ('phoneme_pair', 'dn'), ('morph_n', 2), ('base', '11_necessary_dn_002'), ('file_format', 'wav'), ('root', 'stimuli/'), ('word_side', 'right'), ('item_left', 'decessary'), ('item_right', 'necessary'), ('resampled', 1)]),
      OrderedDict([('wav_file', 'stimuli/11_desolate_dn_003.wav'), ('stim_number', 11), ('word_end', 'desolate'), ('non_word', 'nesolate'), ('phoneme_pair', 'dn'), ('morph_n', 3), ('base', '11_desolate_dn_003'), ('file_format', 'wav'), ('root', 'stimuli/'), ('word_side', 'right'), ('item_left', 'nesolate'), ('item_right', 'desolate'), ('resampled', 2)]),
      OrderedDict([('wav_file', 'stimuli/11_necessary_dn_003.wav'), ('stim_number', 11), ('word_end', 'necessary'), ('non_word', 'decessary'), ('phoneme_pair', 'dn'), ('morph_n', 3), ('base', '11_necessary_dn_003'), ('file_format', 'wav'), ('root', 'stimuli/'), ('word_side', 'right'), ('item_left', 'decessary'), ('item_right', 'necessary'), ('resampled', 2)])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
    Routine audio
    Routine response
  LoopTerminator trials
  Routine mturk_code
